PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 2
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  color = 0.9500, 0.9500, 0.9100
  expName = SENSE_IAT
  exportHTML = on Save
  frameRateMsg = Veuillez patienter...
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine welcome
    RoutineSettingsComponent welcome
      saveStartStop = False
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    TextComponent welcome_text
      color = -0.3490, -0.1373, -0.0196
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      syncScreenRefresh = False
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      text:
        Bienvenue dans ce Test d'Associations Implicites Sciences et Genre.

        Pour effectuer ce test, vous n'aurez besoin que de votre clavier. Il durera environ 5 minutes. Vous pouvez quitter le test à tout moment en appuyant sur la touche échap de votre clavier.

        Appuyez sur la barre espace pour passer à l'étape suivante.
    KeyboardComponent welcome_end
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
      syncScreenRefresh = False
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    ImageComponent mosaique
      anchor = bottom-left
      image = Images/mosaiques2.png
      pos = (-1, -1)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent logo
      image = Images/logoSENSE_S4.png
      pos = (0, 0.4)
      size = (0.1803*2, 0.0669*2)
      startVal [time (s)] = 0.0
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  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    TextComponent instructions_text
      color = -0.3490, -0.1373, -0.0196
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruct_text
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    KeyboardComponent instructions_end
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      store = nothing
      syncScreenRefresh = False
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    ImageComponent mosaique_2
      anchor = bottom-left
      image = Images/mosaiques2.png
      pos = (-1, -1)
      startVal [time (s)] = 0.0
      units = norm
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  Routine words
    RoutineSettingsComponent words
      saveStartStop = False
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    TextComponent all_words
      color = -0.3490, -0.1373, -0.0196
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Voici les catégories et les mots associés utilisés lors de ce test :





        Appuyez sur la barre espace pour passer à l'étape suivante.
    KeyboardComponent words_end
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      store = nothing
      syncScreenRefresh = False
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    ImageComponent mosaique_3
      anchor = bottom-left
      image = Images/mosaiques2.png
      pos = (-1, -1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent Mots
      image = Images/Mots.png
      saveStartStop = False
      size = (1.386*0.93, 0.267*0.93)
      startVal [time (s)] = 0.0
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  Routine ready
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    CodeComponent text_color_2
      Code Type = Auto->JS
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      Begin Experiment:
        top_leftw = ''
        top_leftw_color = [-0.9137, -0.7490, -0.6941]
        bot_leftw = ''
        bot_leftw_color = [-0.9137, -0.7490, -0.6941]
        leftw = ''
        leftw_color = [-0.9137, -0.7490, -0.6941]

        rightw = ''
        rightw_color = [-0.9137, -0.7490, -0.6941]
        top_rightw = ''
        top_rightw_color = [-0.9137, -0.7490, -0.6941]
        bot_rightw = ''
        bot_rightw_color = [-0.9137, -0.7490, -0.6941]
      Begin Routine:
        #check couleur mots de gauche
        if '"E" = Sciences' in label_left:
            leftw = '"E" = Sciences'
            leftw_color = [-0.9137, -0.7490, -0.6941]
        elif '"E" = Masculin  ' in label_left:
            leftw = '"E" = Masculin'
            leftw_color = [-0.4667, -0.0745, -0.9686]
        elif '"E" = Masculin ou Sciences'  in label_left:
            top_leftw = '"E" = Masculin'
            top_leftw_color = [-0.4667, -0.0745, -0.9686]
            bot_leftw = 'ou Sciences'
            bot_leftw_color = [-0.9137, -0.7490, -0.6941]
        elif '"E" = Lettres' in label_left:
            leftw = '"E" = Lettres'
            leftw_color = [-0.9137, -0.7490, -0.6941]
        elif '"E" = Masculin ou Lettres' in label_left:
            top_leftw = '"E" = Masculin'
            top_leftw_color = [-0.4667, -0.0745, -0.9686]
            bot_leftw = 'ou Lettres'
            bot_leftw_color = [-0.9137, -0.7490, -0.6941]
        else:
            top_leftw = '"E" = elsem'
            top_leftw_color = [-0.4667, -0.0745, -0.9686]
            bot_leftw = 'ou else'
            bot_leftw_color = 'black'
            leftw = '"E" = else'
            leftw_color = 'black'

        #check couleur mots de droite
        if '"I" = Lettres' in label_right:
            rightw = '"I" = Lettres'
            rightw_color = [-0.9137, -0.7490, -0.6941]
        elif '"I" = Féminin  ' in label_right:
            rightw = '"I" = Féminin'
            rightw_color = [-0.4667, -0.0745, -0.9686]
        elif '"I" = Féminin ou Lettres' in label_right:
            top_rightw = '"I" = Féminin'
            top_rightw_color = [-0.4667, -0.0745, -0.9686]
            bot_rightw = 'ou Lettres'
            bot_rightw_color = [-0.9137, -0.7490, -0.6941]
        elif '"I" = Sciences' in label_right:
            rightw = '"I" = Sciences'
            rightw_color = [-0.9137, -0.7490, -0.6941]
        elif '"I" = Féminin ou Sciences' in label_right:
            top_rightw = '"I" = Féminin'
            top_rightw_color = [-0.4667, -0.0745, -0.9686]
            bot_rightw = 'ou Sciences'
            bot_rightw_color = [-0.9137, -0.7490, -0.6941]
      End Routine:
        top_leftw = ''
        top_leftw_color = [-0.9137, -0.7490, -0.6941]
        bot_leftw = ''
        bot_leftw_color = [-0.9137, -0.7490, -0.6941]
        leftw = ''
        leftw_color = [-0.9137, -0.7490, -0.6941]

        rightw = ''
        rightw_color = [-0.9137, -0.7490, -0.6941]
        top_rightw = ''
        top_rightw_color = [-0.9137, -0.7490, -0.6941]
        bot_rightw = ''
        bot_rightw_color = [-0.9137, -0.7490, -0.6941]
    TextComponent ready_text
      color = -0.3490, -0.1373, -0.0196
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Voici les catégories dans lesquelles vous devrez classer les mots qui apparaîtront à l'écran.

        Positionnez vos doigts sur les touches "E" et "I".

        Appuyez sur la barre espace pour commencer.
    KeyboardComponent ready_end
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent rightcat_2
      color [set every repeat] = $rightw_color
      letterHeight = 0.05
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $rightw
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    TextComponent top_rightcat_2
      color [set every repeat] = $top_rightw_color
      letterHeight = 0.05
      pos = (0.4, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $top_rightw
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    TextComponent bot_rightcat_2
      color [set every repeat] = $bot_rightw_color
      letterHeight = 0.05
      pos = (0.4, 0.37)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $bot_rightw
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    TextComponent leftcat_2
      color [set every repeat] = $leftw_color
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $leftw
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    TextComponent bot_leftcat_2
      color [set every repeat] = $bot_leftw_color
      letterHeight = 0.05
      pos = (-0.4, 0.37)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $bot_leftw
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    TextComponent top_leftcat_2
      color [set every repeat] = $top_leftw_color
      letterHeight = 0.05
      pos = (-0.4, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $top_leftw
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  Routine trial
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    CodeComponent text_color
      Code Type = Auto->JS
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      Begin Experiment:
        top_leftw = ''
        top_leftw_color = [-0.9137, -0.7490, -0.6941]
        bot_leftw = ''
        bot_leftw_color = [-0.9137, -0.7490, -0.6941]
        leftw = ''
        leftw_color = [-0.9137, -0.7490, -0.6941]

        rightw = ''
        rightcat_color = [-0.9137, -0.7490, -0.6941]
        top_rightw = ''
        top_rightw_color = [-0.9137, -0.7490, -0.6941]
        bot_rightw = ''
        bot_rightw_color = [-0.9137, -0.7490, -0.6941]
        text_stim_color = [-0.9137, -0.7490, -0.6941]

        liste_mots_genre = [
            "Demoiselle", "Garçon", "Femme", "Homme",
            "Tante", "Oncle", "Fille", "Fils",
            "Féminin", "Masculin"
        ]

        liste_mots_sciences = [
            "Biologie", "Philosophie", "Physique",
            "Humanités", "Chimie", "Arts",
            "Mathématiques", "Littérature",
            "Informatique", "Latin"
        ]
      Begin Routine:
        #check couleur mots de gauche
        if '"E" = Sciences' in label_left:
            leftw = '"E" = Sciences'
            leftw_color = [-0.9137, -0.7490, -0.6941]
        elif '"E" = Masculin  ' in label_left:
            leftw = '"E" = Masculin'
            leftw_color = [-0.4667, -0.0745, -0.9686]
        elif '"E" = Masculin ou Sciences'  in label_left:
            top_leftw = '"E" = Masculin'
            top_leftw_color = [-0.4667, -0.0745, -0.9686]
            bot_leftw = 'ou Sciences'
            bot_leftw_color = [-0.9137, -0.7490, -0.6941]
        elif '"E" = Lettres' in label_left:
            leftw = '"E" = Lettres'
            leftw_color = [-0.9137, -0.7490, -0.6941]
        elif '"E" = Masculin ou Lettres' in label_left:
            top_leftw = '"E" = Masculin'
            top_leftw_color = [-0.4667, -0.0745, -0.9686]
            bot_leftw = 'ou Lettres'
            bot_leftw_color = [-0.9137, -0.7490, -0.6941]
        else:
            top_leftw = '"E" = elsem'
            top_leftw_color = [-0.4667, -0.0745, -0.9686]
            bot_leftw = 'ou else'
            bot_leftw_color = [-0.9137, -0.7490, -0.6941]
            leftw = '"E" = else'
            leftw_color = [-0.9137, -0.7490, -0.6941]

        #check couleur mots de droite
        if '"I" = Lettres' in label_right:
            rightw = '"I" = Lettres'
            rightw_color = [-0.9137, -0.7490, -0.6941]
        elif '"I" = Féminin  ' in label_right:
            rightw = '"I" = Féminin'
            rightw_color = [-0.4667, -0.0745, -0.9686]
        elif '"I" = Féminin ou Lettres' in label_right:
            top_rightw = '"I" = Féminin'
            top_rightw_color = [-0.4667, -0.0745, -0.9686]
            bot_rightw = 'ou Lettres'
            bot_rightw_color = [-0.9137, -0.7490, -0.6941]
        elif '"I" = Sciences' in label_right:
            rightw = '"I" = Sciences'
            rightw_color = [-0.9137, -0.7490, -0.6941]
        elif '"I" = Féminin ou Sciences' in label_right:
            top_rightw = '"I" = Féminin'
            top_rightw_color = [-0.4667, -0.0745, -0.9686]
            bot_rightw = 'ou Sciences'
            bot_rightw_color = [-0.9137, -0.7490, -0.6941]
        '''
        else:
            top_rightw = '"I" = elsef'
            top_rightw_color = 'green' [-0.4667, -0.0745, -0.9686]
            bot_rightw = 'ou else'
            bot_rightw_color = 'black'
            rightw = '"I" = else'
            rightw_color = 'black'
        '''

        #check couleur stimulus
        if stimWord in liste_mots_genre:
            text_stim_color = [-0.4667, -0.0745, -0.9686]
        elif stimWord in liste_mots_sciences:
            text_stim_color = [-0.9137, -0.7490, -0.6941]
      End Routine:
        top_leftw = ''
        top_leftw_color = [-0.9137, -0.7490, -0.6941]
        bot_leftw = ''
        bot_leftw_color = [-0.9137, -0.7490, -0.6941]
        leftw = ''
        leftw_color = [-0.9137, -0.7490, -0.6941]

        rightw = ''
        rightw_color = [-0.9137, -0.7490, -0.6941]
        top_rightw = ''
        top_rightw_color = [-0.9137, -0.7490, -0.6941]
        bot_rightw = ''
        bot_rightw_color = [-0.9137, -0.7490, -0.6941]
        text_stim_color = [-0.9137, -0.7490, -0.6941]
    CodeComponent check_corr
      Code Type = Auto->JS
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      Begin Routine:
        cor_resp = 1
      Each Frame:
        if keyboard_resp.keys:
            if keyboard_resp.keys[0] != CorrAns and len(keyboard_resp.keys) >  0 : #affiche le message "erreur" si la première touche appuyée n'est pas la bonne
                cor_resp = 0
            else:
                cor_resp = 1 #active la condition pour afficher le composant error_msg


        if keyboard_resp.keys:
            if len(keyboard_resp.keys) > 0 and keyboard_resp.keys[-1] == CorrAns: #vérifie si la touche est correcte et passe à l'essai suivant le cas échéant
                keyboard_resp.corr = True
                continueRoutine = False
    CodeComponent compute_score
      Code Type = Auto->JS
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      Begin Experiment:
        rt_block3 = []
        corr_rt_block3 = []
        incorr_rt_block3 = []
        err_block3 = 0

        rt_block4 = []
        corr_rt_block4 = []
        incorr_rt_block4 = []
        err_block4 = 0

        rt_block6 = []
        corr_rt_block6 = []
        incorr_rt_block6 = []
        err_block6 = 0

        rt_block7 = []
        corr_rt_block7 = []
        incorr_rt_block7 = []
        err_block7 = 0

        fast_responses = 0
        slow_responses = 0
        total_responses = 0
        num_errors = 0
      End Routine:
        '''Bloc 3'''
        if conds_file == "cong_test - 20.xlsx": #ajout du temps de réponse pour le bloc 3
            if isinstance(keyboard_resp.rt[-1], float): #évite le bug tant qu'aucune touche n'est touchée
                rt_block3.append(keyboard_resp.rt[-1]) #ajoute rt aux rép du bloc
                if keyboard_resp.keys[0] != CorrAns: #calcul du nb d'erreurs du bloc 4
                    err_block3 = err_block3 + 1
                    incorr_rt_block3.append(keyboard_resp.rt[-1]) #ajoute rt aux rép incorrectes du bloc
                elif keyboard_resp.keys[0] == CorrAns:
                    corr_rt_block3.append(keyboard_resp.rt[-1]) #ajoute rt aux rép correctes du bloc


        '''Bloc 4'''
        if conds_file == "cong_test - 40.xlsx": #ajout du temps de réponse pour le bloc 4
            if isinstance(keyboard_resp.rt[-1], float): #évite le bug tant qu'aucune touche n'est touchée
                rt_block4.append(keyboard_resp.rt[-1]) #ajoute rt aux rép du bloc
                if keyboard_resp.keys[0] != CorrAns: #calcul du nb d'erreurs du bloc 4
                    err_block4 = err_block4 + 1
                    incorr_rt_block4.append(keyboard_resp.rt[-1]) #ajoute rt aux rép incorrectes du bloc
                elif keyboard_resp.keys[0] == CorrAns:
                    corr_rt_block4.append(keyboard_resp.rt[-1]) #ajoute rt aux rép correctes du bloc

        '''Bloc 6'''
        if conds_file == "incong_test - 20.xlsx": #ajout du temps de réponse pour le bloc 6
            if isinstance(keyboard_resp.rt[-1], float): #évite le bug tant qu'aucune touche n'est touchée
                rt_block6.append(keyboard_resp.rt[-1]) #ajoute rt aux rép du bloc
                if keyboard_resp.keys[0] != CorrAns: #calcul du nb d'erreurs du bloc 4
                    err_block6 = err_block6 + 1
                    incorr_rt_block6.append(keyboard_resp.rt[-1]) #ajoute rt aux rép incorrectes du bloc
                elif keyboard_resp.keys[0] == CorrAns:
                    corr_rt_block6.append(keyboard_resp.rt[-1]) #ajoute rt aux rép correctes du bloc

        '''Bloc 7'''
        if conds_file == "incong_test - 40.xlsx": #ajout du temps de réponse pour le bloc 7
            if isinstance(keyboard_resp.rt[-1], float): #évite le bug tant qu'aucune touche n'est touchée
                rt_block7.append(keyboard_resp.rt[-1]) #ajoute rt aux rép du bloc
                if keyboard_resp.keys[0] != CorrAns: #calcul du nb d'erreurs du bloc 4
                    err_block7 = err_block7 + 1
                    incorr_rt_block7.append(keyboard_resp.rt[-1]) #ajoute rt aux rép incorrectes du bloc
                elif keyboard_resp.keys[0] == CorrAns:
                    corr_rt_block7.append(keyboard_resp.rt[-1]) #ajoute rt aux rép correctes du bloc

        '''Autre'''
        if keyboard_resp.keys[0] != CorrAns and keyboard_resp.keys: #store le nb total d'erreurs
            num_errors = num_errors+ 1

        if keyboard_resp.rt[-1] > 3 and keyboard_resp.keys: #verification si la réponse est trop lente
            slow_responses = slow_responses + 1
        elif keyboard_resp.rt[-1] < 0.3 and keyboard_resp.keys : #vérification si la réponse est trop rapide
            fast_responses = fast_responses + 1

        total_responses = total_responses + 1 #nb total d'essais

        keyboard_resp.keys = []
    TextComponent fixation
      color = 0, 0, 0
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_stim
      color [set every repeat] = $text_stim_color
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $stimWord
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    KeyboardComponent keyboard_resp
      allowedKeys [set every repeat] = 'e','i'
      correctAns = $CorrAns
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = all keys
      storeCorrect = True
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    TextComponent error_msg
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      startEstim = 0.5
      startVal [condition] = $cor_resp == 0
      text [set every repeat] = Erreur
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    TextComponent rightcat
      color [set every repeat] = $rightw_color
      letterHeight = 0.05
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $rightw
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    TextComponent top_rightcat
      color [set every repeat] = $top_rightw_color
      letterHeight = 0.05
      pos = (0.4, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $top_rightw
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    TextComponent bot_rightcat
      color [set every repeat] = $bot_rightw_color
      letterHeight = 0.05
      pos = (0.4, 0.37)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $bot_rightw
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    TextComponent leftcat
      color [set every repeat] = $leftw_color
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $leftw
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    TextComponent bot_leftcat
      color [set every repeat] = $bot_leftw_color
      letterHeight = 0.05
      pos = (-0.4, 0.37)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $bot_leftw
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    TextComponent top_leftcat
      color [set every repeat] = $top_leftw_color
      letterHeight = 0.05
      pos = (-0.4, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $top_leftw
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  Routine transition
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    TextComponent cross
      color = 0, 0, 0
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine score
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    CodeComponent score
      Code Type = Both
      Begin JS Routine:
        // Initialisation des variables pour JS
        score_msg = "";
        err_msg = "";
        feedback_msg ="";
        mean_rt_block3 = 0;
        mean_rt_block4 = 0;
        mean_rt_block6 = 0;
        mean_rt_block7 = 0;
        std_rt_block3 = 0;
        std_rt_block4 = 0;
        std_rt_block6 = 0;
        std_rt_block7 = 0;
        pooled_std36 = 0;
        pooled_std47 = 0;
        new_value3 = 0;
        new_value4 = 0;
        new_value6 = 0;
        new_value7 = 0;
        fblock3 = [];
        fblock4 = [];
        fblock6 = [];
        fblock7 = [];
        mb3 = 0;
        mb4 = 0;
        mb6 = 0;
        mb7 = 0;
        iat_score = 0;

        // Fonctions utilitaires
        function moyenne(liste) {
            return liste.length ? liste.reduce((a, b) => a + b, 0) / liste.length : 0;
        }

        function ecartType(liste, moyenne) {
            if (liste.length > 1) {
                let variance = liste.reduce((sum, x) => sum + Math.pow(x - moyenne, 2), 0) / (liste.length - 1);
                return Math.sqrt(variance);
            }
            return 0;
        }

        function pooledStd(liste1, liste2, std1, std2) {
            if (liste1.length > 1 && liste2.length > 1) {
                let pooledVariance = (((liste1.length - 1) * Math.pow(std1, 2)) + ((liste2.length - 1) * Math.pow(std2, 2))) / (liste1.length + liste2.length - 2);
                return Math.sqrt(pooledVariance);
            }
            return 0;
        }

        function remplacerIncorrects(parMoyenne, incorrects) {
            return Array(incorrects.length).fill(parMoyenne + 0.6);
        }

        // Calcul des données
        if ((fast_responses / total_responses) > 0.1) {
            score_msg = "Vous avez répondu trop rapidement pour obtenir un score valide. Recommencez le test en répondant correctement et sans vous précipiter.";
            err_msg = "Vous avez fait " + num_errors + " erreurs.";
        } else if ((slow_responses / total_responses) > 0.05) {
            score_msg = "Vous avez répondu trop lentement pour obtenir un score valide. Recommencez le test en répondant correctement le plus rapidement possible.";
            err_msg = "Vous avez fait " + num_errors + " erreurs.";
        } else {
            // Moyennes des réponses correctes de chaque bloc
            let corr_mean_rt_block3 = moyenne(corr_rt_block3);
            let corr_mean_rt_block4 = moyenne(corr_rt_block4);
            let corr_mean_rt_block6 = moyenne(corr_rt_block6);
            let corr_mean_rt_block7 = moyenne(corr_rt_block7);

            // Moyennes des blocs
            mean_rt_block3 = moyenne(rt_block3);
            mean_rt_block6 = moyenne(rt_block6);
            mean_rt_block4 = moyenne(rt_block4);
            mean_rt_block7 = moyenne(rt_block7);

            // Écarts types des blocs
            std_rt_block3 = ecartType(rt_block3, mean_rt_block3);
            std_rt_block6 = ecartType(rt_block6, mean_rt_block6);
            std_rt_block4 = ecartType(rt_block4, mean_rt_block4);
            std_rt_block7 = ecartType(rt_block7, mean_rt_block7);

            // Pooled std des blocs
            pooled_std36 = pooledStd(rt_block3, rt_block6, std_rt_block3, std_rt_block6);
            pooled_std47 = pooledStd(rt_block4, rt_block7, std_rt_block4, std_rt_block7);

            // Remplacement des RT incorrects
            incorr_rt_block3 = remplacerIncorrects(mean_rt_block3, incorr_rt_block3);
            incorr_rt_block4 = remplacerIncorrects(mean_rt_block4, incorr_rt_block4);
            incorr_rt_block6 = remplacerIncorrects(mean_rt_block6, incorr_rt_block6);
            incorr_rt_block7 = remplacerIncorrects(mean_rt_block7, incorr_rt_block7);

            // Fusion des blocs incorrects modifiés et des blocs corrects
            fblock3 = incorr_rt_block3.concat(corr_rt_block3);
            fblock4 = incorr_rt_block4.concat(corr_rt_block4);
            fblock6 = incorr_rt_block6.concat(corr_rt_block6);
            fblock7 = incorr_rt_block7.concat(corr_rt_block7);

            // Calcul des moyennes des blocs mis à jour
            mb3 = moyenne(fblock3);
            mb4 = moyenne(fblock4);
            mb6 = moyenne(fblock6);
            mb7 = moyenne(fblock7);

            // Score de l'IAT
            if (((pooled_std36 !== 0) && (pooled_std47 !== 0))) {
                iat_score = ((mb6 - mb3) / pooled_std36 + (mb7 - mb4) / pooled_std47) / 2;
            } else {
                iat_score = 0;
            }
            score_msg = "Votre score à l'IAT est de " + iat_score.toFixed(5);
            if (0 <= iat_score && iat_score <= 0.5) {
            feedback_msg = "Un score positif inférieur à 0.5 traduit des associations stéréotypiques entre masculin et science et féminin et lettres.";
            } else if (-0.5 <= iat_score && iat_score < 0) {
            feedback_msg = "Un score négatif supérieur à -0.5 traduit des associations contre-stéréotypiques entre féminin et science et masculin et lettres.";
            } else if (iat_score < -0.5) {
            feedback_msg = "Un score inférieur à -0.5 traduit des associations contre-stéréotypiques fortes entre féminin et science et masculin et lettres.";
            } else if (iat_score > 0.5) {
            feedback_msg = "Un score supérieur à 0.5 traduit des associations stéréotypiques fortes entre masculin et science et féminin et lettres.";
            }

        }
      Begin Routine:
        # Initialisation des variables pour JS
        score_msg = ""
        err_msg = ""
        feedback_msg = ""
        mean_rt_block3 = 0
        mean_rt_block4 = 0
        mean_rt_block6 = 0
        mean_rt_block7 = 0
        std_rt_block3 = 0
        std_rt_block4 = 0
        std_rt_block6 = 0
        std_rt_block7 = 0
        pooled_std36 = 0
        pooled_std47 = 0
        new_value3 = 0
        new_value4 = 0
        new_value6 = 0
        new_value7 = 0
        fblock3 = []
        fblock4 = []
        fblock6 = []
        fblock7 = []
        mb3 = 0
        mb4 = 0
        mb6 = 0
        mb7 = 0
        iat_score = 0

        # Fonctions utilitaires
        def moyenne(liste):
            return sum(liste) / len(liste) if liste else 0

        def ecart_type(liste, moyenne):
            if len(liste) > 1:
                variance = sum((x - moyenne) ** 2 for x in liste) / (len(liste) - 1)
                return variance ** 0.5
            return 0

        def pooled_std(liste1, liste2, std1, std2):
            if len(liste1) > 1 and len(liste2) > 1:
                pooled_variance = ((len(liste1) - 1) * std1 ** 2 + (len(liste2) - 1) * std2 ** 2) / (len(liste1) + len(liste2) - 2)
                return pooled_variance ** 0.5
            return 0

        def remplacer_incorrects(par_moyenne, incorrects):
            return [par_moyenne + 0.6] * len(incorrects)

        # Calcul des données
        if (fast_responses / total_responses) > 0.1:
            score_msg = "Vous avez répondu trop rapidement pour obtenir un score valide. Recommencez le test en répondant correctement et sans vous précipiter."
            err_msg = "Vous avez fait " + str(num_errors) + " erreurs."
        elif (slow_responses / total_responses) > 0.05:
            score_msg = "Vous avez répondu trop lentement pour obtenir un score valide. Recommencez le test en répondant correctement le plus rapidement possible."
            err_msg = "Vous avez fait " + str(num_errors) + " erreurs."
        else:
            # Moyennes des réponses correctes de chaque bloc
            corr_mean_rt_block3 = moyenne(corr_rt_block3)
            corr_mean_rt_block4 = moyenne(corr_rt_block4)
            corr_mean_rt_block6 = moyenne(corr_rt_block6)
            corr_mean_rt_block7 = moyenne(corr_rt_block7)

            # Moyennes des blocs
            mean_rt_block3 = moyenne(rt_block3)
            mean_rt_block6 = moyenne(rt_block6)
            mean_rt_block4 = moyenne(rt_block4)
            mean_rt_block7 = moyenne(rt_block7)

            # Écarts types des blocs
            std_rt_block3 = ecart_type(rt_block3, mean_rt_block3)
            std_rt_block6 = ecart_type(rt_block6, mean_rt_block6)
            std_rt_block4 = ecart_type(rt_block4, mean_rt_block4)
            std_rt_block7 = ecart_type(rt_block7, mean_rt_block7)

            # Pooled std des blocs
            pooled_std36 = pooled_std(rt_block3, rt_block6, std_rt_block3, std_rt_block6)
            pooled_std47 = pooled_std(rt_block4, rt_block7, std_rt_block4, std_rt_block7)

            # Remplacement des RT incorrects
            incorr_rt_block3 = remplacer_incorrects(mean_rt_block3, incorr_rt_block3)
            incorr_rt_block4 = remplacer_incorrects(mean_rt_block4, incorr_rt_block4)
            incorr_rt_block6 = remplacer_incorrects(mean_rt_block6, incorr_rt_block6)
            incorr_rt_block7 = remplacer_incorrects(mean_rt_block7, incorr_rt_block7)

            # Fusion des blocs incorrects modifiés et des blocs corrects
            fblock3 = incorr_rt_block3 + corr_rt_block3
            fblock4 = incorr_rt_block4 + corr_rt_block4
            fblock6 = incorr_rt_block6 + corr_rt_block6
            fblock7 = incorr_rt_block7 + corr_rt_block7

            # Calcul des moyennes des blocs mis à jour
            mb3 = moyenne(fblock3)
            mb4 = moyenne(fblock4)
            mb6 = moyenne(fblock6)
            mb7 = moyenne(fblock7)

            # Score de l'IAT
            if pooled_std36 != 0 and pooled_std47 != 0:
                iat_score = ((mb6 - mb3) / pooled_std36 + (mb7 - mb4) / pooled_std47) / 2
            else:
                iat_score = 0
            score_msg = "Votre score à l'IAT est de " + str(iat_score)[:5]
            # message adapté en fonction du score
            if 0 <= iat_score <= 0.5:
                feedback_msg = "Un score compris entre 0 et 0.5 traduit des associations stéréotypiques entre masculin et science et féminin et lettres."
            elif -0.5 <= iat_score < 0:
                feedback_msg = "Un score négatif compris entre -0,5 et 0 traduit des associations contre-stéréotypiques entre féminin et science et masculin et lettres."
            elif iat_score < -0.5:
                feedback_msg = "Un score inférieur à -0.5 traduit des associations contre-stéréotypiques fortes entre féminin et science et masculin et lettres."
            elif iat_score > 0.5:
                feedback_msg = "Un score supérieur à 0.5 traduit des associations stéréotypiques fortes entre masculin et science et féminin et lettres."
    TextComponent score_feedback
      color = -0.3490, -0.1373, -0.0196
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $score_msg
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    TextComponent score_meaning
      color = -0.3490, -0.1373, -0.0196
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Le score peut être positif ou négatif, entre -2 et +2. Un score positif correspond à des associations stéréotypiques et un score négatif à des associations contre-stéréotypiques. Plus sa valeur absolue est élevée, plus les associations sont fortes.

        - Le score moyen d'un échantillon français est de 0.43 (Nosek et al., 2009)
        - Le score moyen de 61 pays est de 0.38 (Nosek et al., 2009)

        Pour terminer le test, appuyez sur la barre espace.
    KeyboardComponent end_score
      allowedKeys = 'space',
      correctAns = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      store = nothing
      storeCorrect = True
      syncScreenRefresh = False
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    TextComponent err_feedback
      color = -0.3490, -0.1373, -0.0196
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $err_msg
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    TextComponent score_bis
      color = black
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $sse
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    TextComponent adapted_fb
      color = -0.3490, -0.1373, -0.0196
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_msg
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    TextComponent skip_score
      color = -0.3490, -0.1373, -0.0196
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Appuyez sur la barre espace pour terminer le test
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  Routine end
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    TextComponent text
      color = -0.3490, -0.1373, -0.0196
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Ce test d'associations implicites est terminé. Nous vous remercions d'y avoir pris part. Aucune donnée n'est conservée à l'issue de ce test, qui ne sert qu'à rendre compte de ses propres stéréotypes. Ainsi, si votre score est positif, vous êtes sujets aux stéréotypes sur les femmes dans les sciences.

        Vous pouvez quitter l'expérience en appuyant sur n'importe quelle touche.
    KeyboardComponent end_key_resp
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      store = nothing
      syncScreenRefresh = False
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    ImageComponent mosaique_4
      anchor = bottom-left
      image = Images/mosaiques2.png
      pos = (-1, -1)
      startVal [time (s)] = 0.0
      units = norm
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  Routine score2
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    TextComponent score_meaning_2
      color = -0.3490, -0.1373, -0.0196
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Le score peut être positif ou négatif, entre -2 et +2. Un score positif correspond à des associations stéréotypiques et un score négatif à des associations contre-stéréotypiques. Plus sa valeur absolue est élevée, plus les associations sont fortes.

        A titre de comparaison :
        - Le score moyen d'un échantillon français est de 0.43 (Nosek et al., 2009)
        - Le score moyen de 61 pays est de 0.38 (Nosek et al., 2009)

        Pour terminer le test, appuyez sur la barre espace.
    KeyboardComponent end_score_2
      allowedKeys = 'space',
      correctAns = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      store = nothing
      storeCorrect = True
      syncScreenRefresh = False
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Flow
  LoopInitiator restart loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine welcome
    LoopInitiator instructions_loop loopType="TrialHandler"
      conditionsFile = instructs.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'pageNum': 1, 'instruct_text': 'Des mots vont apparaître au centre de l\'écran. Vous devrez les classer en utilisant les touches "E" et "I" de votre clavier.\n\nEssayez d\'être le plus rapide possible et de ne pas faire d\'erreurs.'},
        {'pageNum': 2, 'instruct_text': 'Les touches "E" et "I" du clavier seront toujours associées à une catégorie qui sera affichée.\nChaque mot a une classification correcte. En cas d\'erreur, elle sera affichée et vous devrez appuyer sur la touche correcte pour continuer.\nLe test ne donne pas de résultat si vous répondez trop rapidement ou trop lentement.\nAppuyez sur la barre espace pour passer à l\'étape suivante.'}]
      Routine instructions
    LoopTerminator instructions_loop
    Routine words
    LoopInitiator blocks loopType="TrialHandler"
      conditionsFile = blocks_order - long.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'conds_file': 'pos_neg_train - 20.xlsx', 'label_left': '"E" = Sciences', 'label_right': '"I" = Lettres'},
        {'conds_file': 'cong_train - long.xlsx', 'label_left': '"E" = Masculin  ', 'label_right': '"I" = Féminin  '},
        {'conds_file': 'cong_test - 20.xlsx', 'label_left': '"E" = Masculin ou Sciences', 'label_right': '"I" = Féminin ou Lettres'},
        {'conds_file': 'cong_test - 40.xlsx', 'label_left': '"E" = Masculin ou Sciences', 'label_right': '"I" = Féminin ou Lettres'},
        {'conds_file': 'incong_train - long.xlsx', 'label_left': '"E" = Lettres', 'label_right': '"I" = Sciences'},
        {'conds_file': 'incong_test - 20.xlsx', 'label_left': '"E" = Masculin ou Lettres', 'label_right': '"I" = Féminin ou Sciences'},
        {'conds_file': 'incong_test - 40.xlsx', 'label_left': '"E" = Masculin ou Lettres', 'label_right': '"I" = Féminin ou Sciences'}]
      Routine ready
      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = $conds_file
        loopType = random
        nReps = 1
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        Routine trial
        Routine transition
      LoopTerminator trials
    LoopTerminator blocks
    Routine score
    Routine score2
  LoopTerminator restart
  Routine end
